PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = glasgow face matching task new
  keyboardBackend = ioHub
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Routines
  Routine instructions
    ImageComponent background
      image = C:/Users/ASUS/OneDrive/Desktop/glasgow_face_matching-master/background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent startkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instructionstxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a pair of faces. Your task is to use the response keys to indicate whether the images are of the same or different individuals.

        Respond with the left arrow key if the faces are the same.
        Respond with  the right arrow key if the faces are different.

        You are free to view the faces as long as needed.
  Routine trial
    ImageComponent background2
      image = C:/Users/ASUS/OneDrive/Desktop/glasgow_face_matching-master/background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
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    ImageComponent faces
      image [set every repeat] = $imageFile
      size = (1.1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) +'/' + str(trials.nTotal) 
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    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.4)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text = Left=Same          Right=Different
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  Routine thanks
    ImageComponent background4
      image = C:/Users/ASUS/OneDrive/Desktop/glasgow_face_matching-master/background.jpg
      size = (1.55, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextboxComponent endmsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you  for participating in the experiment!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = glasgow face matching task conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\020_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\025_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\068_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\069_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\074_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\075_DV_C2.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\081_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\085_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\092_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'},
      {'imageFile': 'C:\\Users\\ASUS\\OneDrive\\Desktop\\glasgow_face_matching-master\\same\\102_C2_DV.jpg', 'corrAns': 'left', 'sameOrDiff': 'same'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
